PsychoPy2experiment version="1.85.6"
Settings
  Monitor = testMonitor
  color = $[1.0,1.0,1.0]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [2160, 1440]
  Full-screen window = True
  expName = somatic_relaxation_sr
  Screen = 1
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Routines
  Routine instructions
    TextComponent Instructions
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are about to listen to a recording of a guided somatic relaxation. Please try to follow the instructions to the best of your ability while keeping still in your seat. The entire experience should last approximately 20 minutes.

        Press SPACE to continue.
    KeyboardComponent begin
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine intervention
    SoundComponent sound_SR
      sound = ../stimuli/Newcastle Hospitals - unknown album - 00 - Progressive Muscle Relaxation - Male Voice.ogg
      stopVal [duration (s)] = 1216
      startVal [time (s)] = 0.0
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  Routine ending
    TextComponent text
      color = black
      text = This part is done. Please inform the experimenter.
      stopVal [condition] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent end_exp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine intervention
  Routine ending
