PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  color = white
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [2160, 1440]
  Full-screen window = True
  expName = finger_tap
  Screen = 1
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Routines
  Routine training
    KeyboardComponent train_press
      stopVal [duration (s)] = .6
      forceEndRoutine = False
      discard previous = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    SoundComponent tick
      sound = C:\Users\enter\OneDrive - University of Toronto\Labs\Inzlicht Lab\outside_project\experiment\finger_tapping\clock-tick1.wav
      stopVal [duration (s)] = 0.1
      startVal [time (s)] = 0.0
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  Routine pressing
    KeyboardComponent button_press
      stopVal [duration (s)] = 120
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine b'instructions_2'
    TextComponent instructions_text
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        For this next task, you will be asked to press the space bar once every 600 ms (0.6 seconds). A metronome sound will be played during the first 10 seconds to help you establish a rythm. Afterwards, you are to continue this rythm to the best of your ability for 4 minutes.

        Press Space to continue.
    KeyboardComponent space_start
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine inter_stimulus
    TextComponent blank_iti
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instructions_2
  Routine inter_stimulus
  LoopInitiator train_loop loopType="TrialHandler"
    loopType = random
    nReps = 17
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    Routine training
  LoopTerminator train_loop
  Routine pressing
